# Generated by Configurator on Thu Apr 14 07:06:18 EDT 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM4,SerialManager,COM4
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,ZStage:Z:32,ASITiger,ZStage:Z:32
Device,LED:X:31,ASITiger,LED:X:31
Device,Camera-1,PVCAM,Camera-1
Device,LED:G:36:1,ASITiger,LED:G:36:1
Device,LED:G:36:2,ASITiger,LED:G:36:2
Device,LED:G:36:3,ASITiger,LED:G:36:3
Device,LED:G:36:4,ASITiger,LED:G:36:4
Device,FilterWheel:0:38,ASITiger,FilterWheel:0:38

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,TigerCommHub,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,XYStage:XY:31,TigerCommHub
Parent,ZStage:Z:32,TigerCommHub
Parent,LED:X:31,TigerCommHub
Parent,LED:G:36:1,TigerCommHub
Parent,LED:G:36:2,TigerCommHub
Parent,LED:G:36:3,TigerCommHub
Parent,LED:G:36:4,TigerCommHub
Parent,FilterWheel:0:38,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage:Z:32,-1

# Roles
Property,Core,Camera,Camera-1
Property,Core,Focus,ZStage:Z:32
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# FilterWheel:0:38
Label,FilterWheel:0:38,7,Position-8
Label,FilterWheel:0:38,6,Position-7
Label,FilterWheel:0:38,5,Position-6
Label,FilterWheel:0:38,4,811/80
Label,FilterWheel:0:38,3,690/50
Label,FilterWheel:0:38,2,609/34
Label,FilterWheel:0:38,1,525/30
Label,FilterWheel:0:38,0,434/32

# Configuration presets
# Group: LED 350nm pwr
# Preset: NewPreset
ConfigGroup,LED 350nm pwr,NewPreset,LED:X:31,LED Intensity(%),50


# Group: Startup
# Preset: startup
ConfigGroup,Startup,startup,LED:X:31,State,Closed
ConfigGroup,Startup,startup,LED:G:36:1,State,Closed
ConfigGroup,Startup,startup,LED:G:36:2,State,Closed
ConfigGroup,Startup,startup,LED:G:36:3,State,Closed
ConfigGroup,Startup,startup,LED:G:36:4,State,Closed
ConfigGroup,Startup,startup,XYStage:XY:31,TransposeMirrorX,1
ConfigGroup,Startup,startup,XYStage:XY:31,TransposeMirrorY,0


# Group: LED 480nm pwr
# Preset: NewPreset
ConfigGroup,LED 480nm pwr,NewPreset,LED:G:36:2,LED Intensity(%),50


# Group: Color
# Preset: A647
ConfigGroup,Color,A647,LED:G:36:1,State,Closed
ConfigGroup,Color,A647,LED:G:36:2,State,Closed
ConfigGroup,Color,A647,LED:G:36:3,State,Closed
ConfigGroup,Color,A647,LED:G:36:4,State,Closed
ConfigGroup,Color,A647,FilterWheel:0:38,Label,690/50
ConfigGroup,Color,A647,Core,Shutter,LED:G:36:4

# Preset: A488
ConfigGroup,Color,A488,LED:G:36:1,State,Closed
ConfigGroup,Color,A488,LED:G:36:2,State,Closed
ConfigGroup,Color,A488,LED:G:36:3,State,Closed
ConfigGroup,Color,A488,LED:G:36:4,State,Closed
ConfigGroup,Color,A488,FilterWheel:0:38,Label,525/30
ConfigGroup,Color,A488,Core,Shutter,LED:G:36:2

# Preset: DAPI
ConfigGroup,Color,DAPI,LED:G:36:1,State,Closed
ConfigGroup,Color,DAPI,LED:G:36:2,State,Closed
ConfigGroup,Color,DAPI,LED:G:36:3,State,Closed
ConfigGroup,Color,DAPI,LED:G:36:4,State,Closed
ConfigGroup,Color,DAPI,FilterWheel:0:38,Label,434/32
ConfigGroup,Color,DAPI,Core,Shutter,LED:G:36:1

# Preset: A555
ConfigGroup,Color,A555,LED:G:36:1,State,Closed
ConfigGroup,Color,A555,LED:G:36:2,State,Closed
ConfigGroup,Color,A555,LED:G:36:3,State,Closed
ConfigGroup,Color,A555,LED:G:36:4,State,Closed
ConfigGroup,Color,A555,FilterWheel:0:38,Label,609/34
ConfigGroup,Color,A555,Core,Shutter,LED:G:36:3


# Group: LED 560nm pwr
# Preset: NewPreset
ConfigGroup,LED 560nm pwr,NewPreset,LED:G:36:3,LED Intensity(%),50


# Group: LED 640nm pwr
# Preset: NewPreset
ConfigGroup,LED 640nm pwr,NewPreset,LED:G:36:4,LED Intensity(%),50



# PixelSize settings
# Resolution preset: default
ConfigPixelSize,default,Core,XYStage,XYStage:XY:31
PixelSize_um,default,0.189
PixelSizeAffine,default,0.189,0.0,0.0,0.0,0.189,0.0

